CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file does endwith ".czi")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:AF647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:KuO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "3")
    Name to assign these images:Autofluorescence
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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enabled:False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
    Select the input image:KuO
    Name the output image:RescaleIntensityKuO
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.015
    Intensity range for the output image:0.0,1.0
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
RescaleIntensity:[module_num:6|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enabled:False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
    Select the input image:Autofluorescence
    Name the output image:RescaleIntensityAutofluo
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.015
    Intensity range for the output image:0.0,1.0
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
ImageMath:[module_num:7|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
    Operation:None
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKuO
    Image or measurement?:Image
    Select the first image:KuO
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:8|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
    Operation:None
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathAutofluo
    Image or measurement?:Image
    Select the first image:Autofluorescence
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
GaussianFilter:[module_num:9|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
    Select the input image:ImageAfterMathKuO
    Name the output image:GaussianFilterKuO
    Sigma:2

GaussianFilter:[module_num:10|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
    Select the input image:ImageAfterMathAutofluo
    Name the output image:GaussianFilterautofluo
    Sigma:2

ImageMath:[module_num:11|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKuoAutofluo
    Image or measurement?:Image
    Select the first image:GaussianFilterKuO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Autofluorescence
    Multiply the second image by:1.0
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
ImageMath:[module_num:12|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterSubstractKuoAutofluo
    Image or measurement?:Image
    Select the first image:GaussianFilterKuO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterautofluo
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:ImageAfterMathKuoAutofluo
    Name the primary objects to be identified:IdentifyPrimaryObjectsKuOautofluo
    Typical diameter of objects, in pixel units (Min,Max):30,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
TrackObjects:[module_num:14|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
    Choose a tracking method:Overlap
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:No
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    Filter objects by lifetime?:No
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
MeasureObjectIntensity:[module_num:15|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
    Select images to measure:ImageAfterSubstractKuoAutofluo
    Select objects to measure:IdentifyPrimaryObjectsKuOautofluo

FilterObjects:[module_num:16|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
    Select the objects to filter:IdentifyPrimaryObjectsKuOautofluo
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_UpperQuartileIntensity_ImageAfterSubstractKuoAutofluo
    Filter using a minimum measurement value?:Yes
    Minimum value:0.02
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

ImageMath:[module_num:17|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:KuO
    Multiply the first image by:^2
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    Image or measurement?:Image
    Select the second image:Autofluorescence
    Multiply the second image by:0.5
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
SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:ImageAfterMath
    Select method for constructing file names:From image filename
    Select image name for file prefix:KuO
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectIntensity:[module_num:19|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enabled:False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
    Select images to measure:ImageAfterMath
    Select objects to measure:IdentifyPrimaryObjects

ExportToSpreadsheet:[module_num:20|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|Downloads/CellProfiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Metadata_
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

RescaleIntensity:[module_num:21|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enabled:False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
    Select the input image:VWF_067_test
    Name the output image:RescaleIntensity
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Minimum of all images
    Method to calculate the maximum intensity:Maximum of all images
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